PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'File(Condition)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = B_PT
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Routines
  Routine Instruction
    TextComponent textInstruction
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, your task is to verify the number of dots either YOU
        see or the AVATAR sees.

        You will be given a cue: You or He, followed by a number indicating the
        number of dots you are going to verify

        Press Q if the number you see matches the number of dots from the cued
        perspective (You or He), press P if the number you see does not match
        the number of dots from the cued perspective.

        Let's go through a couple examples! Press the Space key to proceed.
    KeyboardComponent Key_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Practice_trial
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        total_acc = 0
      End Routine:
        if(Response_key.corr == 1):
            total_acc = total_acc + 1
        else:
            total_acc = 0
        if(total_acc >= 5):
            break
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent blank500ms
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    TextComponent perspective
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Perspect
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    TextComponent blank500
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    TextComponent numberDots
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Number
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    ImageComponent consistent1
      image [set every repeat] = $Image
      size = (2, 2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent Response_key
      allowedKeys = 'q','p'
      correctAns = $Accurate
      forceEndRoutine = True
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Blank500ms
    TextComponent Blankscreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if not Response_key.keys:
            msg = "Please respond faster!"
        elif Response_key.corr:
            msg = "Good job!"
        else:
            msg = "Oops! Wrong answer."
    TextComponent Feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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  Routine Start_message
    TextComponent instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now you will complete the same task
        you just practiced while watching
        short video clips in between.

        Get ready for the task!

        Press the Space key to continue.
    KeyboardComponent Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Block
    TextComponent fixation1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent Blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    TextComponent Perspect1
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Perspective
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    TextComponent Blank2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    TextComponent Num_dots
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.75
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      text [set every repeat]:
        $NumberDots
    ImageComponent image1
      image [set every repeat] = $ImageName
      size = (2, 2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine InstructionActual
    TextComponent Instruct
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Get ready for the task!

        Press Q if the number you see matches
        the number of dots from the given perspective,
        press P if the number does not match the
        number of dots from the given perspective

        Please respond as fast as you can.

        Press the Space key to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Video
    MovieComponent Amuse
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $AmuseVideo
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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  Routine Practice_message
    TextComponent practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's do some practice!

        As soon as you see the picture, press Q if the number you see
        matches the number of dots from the cued perspective (You or He).

        Press P if the number does not match the number of dots from
        the cued perspective (You or He).

        Press Space key to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finish_message
    TextComponent Finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You just completed the second part of the experiment.

        Just a few more questions to answer before you go.

        Please send the following message to your experimenter through Slack:
        I finished the task.

        Press the Space key to exit.
    KeyboardComponent fini
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NumDotD
    ImageComponent Num_D
      image [set every repeat] = $Num
      size = (2, 2)
      startVal [time (s)] = 0
      units = norm
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    KeyboardComponent Num_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageD
    ImageComponent image
      image [set every repeat] = $DemoName
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Image_select
      allowedKeys = "q","p"
      correctAns = $Corr
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Cue
    TextComponent fixate
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent Blank
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    ImageComponent PerspectDemo
      image [set every repeat] = $View
      size = (2, 2)
      startVal [time (s)] = 1.25
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.25
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  Routine ClarityCheck
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Looks like you are ready for the real experiment!

        If you still have questions about the task,
        please ask your experimenter to explain it
        to you one more time.

        If not, press the Space key to proceed.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ClarityCheck1
    TextComponent Clear
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you still have questions about how the task works,
        please ask your experimenter to explain it.

        If not, press the Space key to proceed.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start_message
  LoopInitiator shuffleblock loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Content/condFile.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('FileName', 'Content/Block1.xlsx'), ('AweVideo', 'Content/Awe/Awe_Initial.mp4'), ('AmuseVideo', 'Content/Amusement/Amusement_initial.mp4'), ('NeutralVideo', 'Content/Neutral/Neutral_initial_video.mp4')]),
      OrderedDict([('FileName', 'Content/Block2.xlsx'), ('AweVideo', 'Content/Awe/Awe_1.mp4'), ('AmuseVideo', 'Content/Amusement/Amusement_1.mp4'), ('NeutralVideo', 'Content/Neutral/Neutral_1.mp4')]),
      OrderedDict([('FileName', 'Content/Block3.xlsx'), ('AweVideo', 'Content/Awe/Awe_2.mp4'), ('AmuseVideo', 'Content/Amusement/Amusement_2.mp4'), ('NeutralVideo', 'Content/Neutral/Neutral_2.mp4')]),
      OrderedDict([('FileName', 'Content/Block4.xlsx'), ('AweVideo', 'Content/Awe/Awe_3.mp4'), ('AmuseVideo', 'Content/Amusement/Amusement_3.mp4'), ('NeutralVideo', 'Content/Neutral/Neutral_3.mp4')])]
    Routine Video
    Routine Blank500ms
    Routine InstructionActual
    LoopInitiator blockrand loopType="TrialHandler"
      Selected rows = 0:25
      conditionsFile = $FileName
      loopType = sequential
      nReps = 1
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      Routine Block
      Routine Blank500ms
    LoopTerminator blockrand
  LoopTerminator shuffleblock
  Routine Finish_message
