PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'Reps': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Instruction
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Routines
  Routine Instruction
    TextComponent textInstruction
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, your task is to verify the number of dots either YOU
        see or the AVATAR sees in a series of pictures.

        You will be given a cue: You or He, meaning the number of dots YOU see
        or the AVATAR sees. Then, you will see a number followed by a picture
        with the avatar in a room.

        Press Q if the number you saw matches the number of dots from the
        given perspective (You or He), press P if the number does not match
        the number of dots from the given perspective.

        Let's go through a couple examples! Press the Space key to proceed.
    KeyboardComponent Key_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Practice_trial
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        total_acc = 0
      End Routine:
        if(Response_key.corr == 1):
            total_acc = total_acc + 1
        else:
            total_acc = 0
        if(total_acc >= 4):
            break
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent blank500ms
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    TextComponent perspective
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Perspect
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    TextComponent blank500
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    TextComponent numberDots
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Number
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    ImageComponent consistent1
      image [set every repeat] = $Image
      size = (2, 2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent Response_key
      allowedKeys = 'q','p'
      correctAns = $Accurate
      forceEndRoutine = True
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Blank500ms
    TextComponent Blankscreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if not Response_key.keys:
            msg = "Please respond faster!"
        elif Response_key.corr:
            msg = "Good job!"
        else:
            msg = "Oops! Wrong answer."
    TextComponent Feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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  Routine Start_message
    TextComponent instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will complete the same task
        you just practiced while watching
        short video clips in between.

        Keep your headphone on and get ready!

        Press Space key to continue.
    KeyboardComponent Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Block
    TextComponent fixation1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent Blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    TextComponent Perspect1
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Perspective
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    TextComponent Blank2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    TextComponent Num_dots
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.75
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      text [set every repeat]:
        $NumberDots
    ImageComponent image1
      image [set every repeat] = $ImageName
      size = (2, 2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine InstructionActual
    TextComponent Instruct
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Get ready for the task!

        Press Q if the number you
        see matches the number of dots from the
        cued perspective, press P if the number
        does not match the number of dots.
        Please respond as fast as you can.

        Press Space bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Video
    MovieComponent Awe
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $AweVideo
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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  Routine Practice_message
    TextComponent practice_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Let's do some practice!

        As soon as you see the picture, press Q if the number
        you see matches the number of dots from the
        given perspective (You or He).

        Press P if the number does not match the number
        of dots from the given perspective (You or He).

        Press Space key to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finish_message
    TextComponent Finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You just completed the second part of the experiment.

        Just a few more questions to answer before you go.

        Please send the following message to your experimenter through Slack:
        I finished the task.

        Press the Space key to exit.
    KeyboardComponent fini
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NumDotD
    ImageComponent Num_D
      image [set every repeat] = $Num
      size = (2, 2)
      startVal [time (s)] = 0
      units = norm
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    KeyboardComponent Num_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageD
    ImageComponent image
      image [set every repeat] = $DemoName
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Image_select
      allowedKeys = "q","p"
      correctAns = $Corr
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Cue
    TextComponent fixate
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    TextComponent Blank
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    ImageComponent PerspectDemo
      image [set every repeat] = $View
      size = (2, 2)
      startVal [time (s)] = 1.25
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.25
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  Routine ClarityCheck
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Looks like you are ready for the real experiment!

        Please send the following message to your experimenter
        on Slack: "I finished the practice section."

        If you still have questions about the task,
        please ask your experimenter to explain it
        to you one more time.

        Press the Space key to exit
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExampleTrial
    TextComponent fixText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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      text:
        +
    TextComponent Blk
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.5
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    TextComponent view
      letterHeight = 0.1
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Perspect
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    TextComponent blk2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    TextComponent num
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $Number
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    ImageComponent image_2
      image [set every repeat] = $Image
      size = (2, 2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent key_resp_7
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 2
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  Routine introTrial
    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = This is what a trial looks like
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Flow
  Routine Instruction
  Routine Blank500ms
  LoopInitiator Demoloop loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Content/Demo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('DemoName', 'Content/Demopic/Ex1.jpeg'), ('View', 'Content/Demopic/demoYou.png'), ('Num', 'Content/Demopic/demo3.png'), ('Corr', 'q')]),
      OrderedDict([('DemoName', 'Content/Demopic/Ex2.jpeg'), ('View', 'Content/Demopic/demoHe.png'), ('Num', 'Content/Demopic/demo1.png'), ('Corr', 'q')]),
      OrderedDict([('DemoName', 'Content/Demopic/Ex3.jpeg'), ('View', 'Content/Demopic/demoYou.png'), ('Num', 'Content/Demopic/demo2.png'), ('Corr', 'p')])]
    Routine Cue
    Routine Blank500ms
    Routine NumDotD
    Routine ImageD
  LoopTerminator Demoloop
  Routine Blank500ms
  Routine Practice_message
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = Content/Practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Image', 'Content/Perspective/1consistL.jpg'), ('Number', 2), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'p')]),
      OrderedDict([('Image', 'Content/Perspective/1consistL.jpg'), ('Number', 1), ('Consistency', 1), ('Perspect', 'You'), ('Accurate', 'q')]),
      OrderedDict([('Image', 'Content/Perspective/1consistR.jpg'), ('Number', 1), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'q')]),
      OrderedDict([('Image', 'Content/Perspective/1consistR.jpg'), ('Number', 2), ('Consistency', 1), ('Perspect', 'You'), ('Accurate', 'p')]),
      OrderedDict([('Image', 'Content/Perspective/2consistL.jpg'), ('Number', 2), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'q')]),
      OrderedDict([('Image', 'Content/Perspective/2consistR.jpg'), ('Number', 3), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'p')]),
      OrderedDict([('Image', 'Content/Perspective/2consistR.jpg'), ('Number', 2), ('Consistency', 1), ('Perspect', 'You'), ('Accurate', 'q')]),
      OrderedDict([('Image', 'Content/Perspective/3consistL.jpg'), ('Number', 1), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'p')]),
      OrderedDict([('Image', 'Content/Perspective/3consistR.jpg'), ('Number', 3), ('Consistency', 1), ('Perspect', 'He'), ('Accurate', 'q')]),
      OrderedDict([('Image', 'Content/Perspective/3consistR.jpg'), ('Number', 1), ('Consistency', 1), ('Perspect', 'You'), ('Accurate', 'p')]),
      OrderedDict([('Image', 'Content/Perspective/1inconsistL.jpg'), ('Number', 0), ('Consistency', 2), ('Perspect', 'He'), ('Accurate', 'q')])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
    Routine Practice_trial
    Routine Blank500ms
    Routine Feedback
  LoopTerminator trials
  Routine Blank500ms
  Routine ClarityCheck
